#
#
# V O X E L   S O U R C E   B A S E D  O N   T H E   H O F F M A N   B R A I N   P H A N T O M

/gate/source/addSource voxel_brain voxel

/gate/source/voxel_brain/reader/insert image
/gate/source/voxel_brain/imageReader/translator/insert range
/gate/source/voxel_brain/imageReader/rangeTranslator/readTable Voxelized_Phantom_Source/activity_range_brain.dat
/gate/source/voxel_brain/imageReader/rangeTranslator/describe 1
/gate/source/voxel_brain/imageReader/readFile Voxelized_Phantom_Source/brain_phantom.h33
/gate/source/voxel_brain/setPosition   -140.8 -140.8 -89.6 mm

/gate/source/voxel_brain/setType backtoback
/gate/source/voxel_brain/gps/particle gamma
/gate/source/voxel_brain/setForcedUnstableFlag true
/gate/source/voxel_brain/setForcedHalfLife 6586.2 s
/gate/source/voxel_brain/gps/energytype Mono
/gate/source/voxel_brain/gps/monoenergy 0.511 MeV
/gate/source/voxel_brain/gps/confine NULL
/gate/source/voxel_brain/gps/angtype iso
/gate/source/voxel_brain/dump 1


/gate/source/list

