/gate/physics/addProcess PhotoElectric
/gate/physics/processes/PhotoElectric/setModel StandardModel

/gate/physics/addProcess Compton
/gate/physics/processes/Compton/setModel StandardModel

/gate/physics/addProcess RayleighScattering
/gate/physics/processes/RayleighScattering/setModel PenelopeModel

/gate/physics/addProcess ElectronIonisation
/gate/physics/processes/ElectronIonisation/setModel StandardModel e-
/gate/physics/processes/ElectronIonisation/setModel StandardModel e+

/gate/physics/addProcess Bremsstrahlung
/gate/physics/processes/Bremsstrahlung/setModel StandardModel e-
/gate/physics/processes/Bremsstrahlung/setModel StandardModel e+

/gate/physics/addProcess PositronAnnihilation

/gate/physics/addProcess MultipleScattering e+
/gate/physics/addProcess MultipleScattering e-

/gate/physics/processList Enabled
/gate/physics/processList Initialized

# CUTS
/gate/physics/Gamma/SetCutInRegion PETcrystals 5 mm
/gate/physics/Electron/SetCutInRegion PETcrystals 5 mm
/gate/physics/Positron/SetCutInRegion PETcrystals 5 mm



