# ACTIVITY OF THE SPHERES

# Sphere in the background.
/gate/source/addSource wcc_src
/gate/source/wcc_src/gps/particle gamma
/gate/source/wcc_src/setType backtoback
/gate/source/wcc_src/setForcedUnstableFlag true
/gate/source/wcc_src/setForcedHalfLife 6586.2 s
/gate/source/wcc_src/gps/energytype 			Mono
/gate/source/wcc_src/gps/monoenergy 			511. keV
/gate/source/wcc_src/gps/angtype iso
/gate/source/wcc_src/gps/type Volume
/gate/source/wcc_src/gps/shape Cylinder
/gate/source/wcc_src/gps/radius 2.5 cm
/gate/source/wcc_src/setActivity 5 MBq

/gate/source/wcc_src/gps/centre 5.0 3.0 0.0 cm
/gate/source/list
