# Uniform phantom

/gate/source/addSource wcc_src
/gate/source/wcc_src/gps/particle gamma
/gate/source/wcc_src/setType backtoback
/gate/source/wcc_src/setForcedUnstableFlag true
/gate/source/wcc_src/setForcedHalfLife 6586.2 s
/gate/source/wcc_src/gps/ene/type 			Mono
/gate/source/wcc_src/gps/ene/mono 			511. keV
/gate/source/wcc_src/gps/ang/type iso
/gate/source/wcc_src/gps/pos/type Volume
/gate/source/wcc_src/gps/pos/shape Cylinder
/gate/source/wcc_src/gps/pos/radius 9.75 cm
/gate/source/wcc_src/gps/pos/halfz 9.125 cm

/gate/source/wcc_src/setActivity 5 MBq

/gate/source/wcc_src/attachTo WCC_Cont
/gate/source/list
